PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': '', 'version': '1', 'PROLIFIC_PID': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = VWM
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Routines
  Routine wm_study
    CodeComponent wm_trial_code
      Code Type = Auto->JS
    TextComponent wm_study_fix
      color [set every repeat] = $basecol
      durationEstim = 0.2
      font = cambria
      letterHeight = 0.05
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
      text = +
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    PolygonComponent wm_loc1_study
      durationEstim = 0.2
      fillColor [set every repeat] = $study_clr1
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad_*cos(0), rad_*sin(0))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
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    PolygonComponent wm_loc2_study
      durationEstim = 0.2
      fillColor [set every repeat] = $study_clr2
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad_*cos(45), -rad_*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
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    PolygonComponent wm_loc3_study
      durationEstim = 0.2
      fillColor [set every repeat] = $study_clr3
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad_*cos(45), -rad_*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
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    PolygonComponent wm_loc4_study
      durationEstim = 0.2
      fillColor [set every repeat] = $study_clr4
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad_*cos(0), rad_*sin(0))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
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    PolygonComponent wm_loc5_study
      durationEstim = 0.2
      fillColor [set every repeat] = $study_clr5
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad_*cos(45), rad_*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
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    PolygonComponent wm_loc6_study
      durationEstim = 0.2
      fillColor [set every repeat] = $study_clr6
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad_*cos(45), rad_*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $study_frames
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  Routine wm_retention
    TextComponent wm_retention_fix
      color [set every repeat] = $basecol
      durationEstim = 1
      font = cambria
      letterHeight = 0.05
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $retention_frames
      text = +
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    PolygonComponent wm_loc1_retention
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(0), rad*sin(0))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $retention_frames
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    PolygonComponent wm_loc2_retention
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(45), -rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $retention_frames
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    PolygonComponent wm_loc3_retention
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(45), -rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $retention_frames
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    PolygonComponent wm_loc4_retention
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(0), rad*sin(0))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $retention_frames
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    PolygonComponent wm_loc5_retention
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(45), rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $retention_frames
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    PolygonComponent wm_loc6_retention
      durationEstim = 1
      fillColor [set every repeat] = $bgcol
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(45), rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $retention_frames
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  Routine wm_test
    CodeComponent wm_test_code
      Code Type = Auto->JS
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      End Routine:
        TRIAL_N = TRIAL_N + 1
    TextComponent wm_test_fix
      color [set every repeat] = $basecol
      durationEstim = 1.3
      font = cambria
      letterHeight = 0.05
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $test_frames
      text = +
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    PolygonComponent wm_loc1_test
      durationEstim = 1.3
      fillColor [set every repeat] = $test_clr1
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(0), rad*sin(0))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_frames
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    PolygonComponent wm_loc2_test
      durationEstim = 1.3
      fillColor [set every repeat] = $test_clr2
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(45), -rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_frames
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    PolygonComponent wm_loc3_test
      durationEstim = 1.3
      fillColor [set every repeat] = $test_clr3
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(45), -rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_frames
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    PolygonComponent wm_loc4_test
      durationEstim = 1.3
      fillColor [set every repeat] = $test_clr4
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(0), rad*sin(0))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_frames
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    PolygonComponent wm_loc5_test
      durationEstim = 1.3
      fillColor [set every repeat] = $test_clr5
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(-rad*cos(45), rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_frames
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    PolygonComponent wm_loc6_test
      durationEstim = 1.3
      fillColor [set every repeat] = $test_clr6
      lineColor [set every repeat] = $basecol
      pos [set every repeat] = $(rad*cos(45), rad*sin(45))
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = $box_size
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = $test_frames
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    KeyboardComponent wm_resp
      allowedKeys = 'd','j'
      durationEstim = 2.6
      forceEndRoutine = False
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = $test_frames*2
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    TextComponent wm_test_fix_end
      color [set every repeat] = $basecol
      durationEstim = 1.3
      font = cambria
      letterHeight = 0.05
      startEstim = 1.3
      startVal [frame N] = $test_frames
      stopVal [duration (frames)] = $test_frames
      text = +
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  Routine wm_intro
    CodeComponent setup_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # To select version run files
        exp_version = str(expInfo['version'])

        # Same colours as Wilken & Ma (2004).
        CLRS = {
            'RED': [1, -0.733333333333333, -0.756862745098039],
            'BLUE': [-0.843137254901961, -0.929411764705882, 0.568627450980392],
            'GREEN': [-1, 0.96078431372549, -0.976470588235294],
            'CYAN': [-0.843137254901961, 0.984313725490196, 1],
            'YELLOW': [0.984313725490196, 0.992156862745098, -0.835294117647059],
            'PURPLE': [1, -0.67843137254902, 1],
            'GREY': [-0.23921568627451, -0.411764705882353, -0.349019607843137],
            'ORANGE': [1, -0.364705882352941, -0.756862745098039],
            # "Black" according to Wilken & Ma:
            'BLACK': [-0.67843137254902, -0.584313725490196, -0.56078431372549],
            # "White" according to me:
            'WHITE': [1, 0.929411764705882, 0.952941176470588],
            # Actual black...
            'X': [-1,-1,-1],
        }

        # AVOIDING NUMPY
        # For the background colour, use 'X'. Needs setting manually.
        bgcol = CLRS.get('X', [-1, -1, -1])
        basecol = [1,1,1] # Used for font colour

        good_feedback_col = CLRS.get('GREEN', [1,1,1]) # '#a6d854'
        slow_feedback_col = CLRS.get('ORANGE', [1,1,1]) # '#feb24c'

        wm_rest_msg = ""

        feedback_msg = ""
        feedback_col = basecol
    TextComponent wm_intro_txt
      color [set every repeat] = $basecol
      font = cambria
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        SECTION 2 of 3

        Change Detection


        Press [SPACE] for instructions
    KeyboardComponent wm_intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wm_rest
    CodeComponent wm_rest_code
      Code Type = Auto->JS
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      Begin Routine:
        n_wm_trials = len(wm_trials.trialList) * wm_trials.nReps
      Each Frame:
        wm_rest_msg = "Completed " + str(TRIAL_N+1) + " of " + str(n_wm_trials) + " trials.\n\nPress [SPACE] to continue..."

        if (TRIAL_N > 0) and (TRIAL_N % (n_wm_trials / 3) == 0):
            print("Break time")
            print(wm_rest_msg)
            continueRoutine = True
        else:
            print("Not break time")

            continueRoutine = False
    TextComponent wm_rest_text
      color = $basecol
      font = cambria
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $wm_rest_msg
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    KeyboardComponent wm_rest_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine wm_real_start
    CodeComponent wm_start_code
      Code Type = Auto->JS
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      Begin Routine:
        # RESTART THE TRIAL COUNTER
        TRIAL_N = 0
      Each Frame:
        if 'practice' in wm_file:
            continueRoutine = False
        else:
            continueRoutine = True
    TextComponent wm_start_txt
      color = $basecol
      font = cambria
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice section. The next section is the same but your responses will be tracked.

        Press [SPACE] to begin the main section.
    TextComponent buttons_reminder_wm
      color = $basecol
      font = cambria
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $buttons_mapping
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    KeyboardComponent wm_start_resp_real
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wm_pre_fixation
    TextComponent wm_pre_fix
      color = $basecol
      durationEstim = 1
      font = cambria
      letterHeight = 0.05
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 60
      text = +
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  Routine wm_instructions_1
    CodeComponent wm_setup_code_1
      Code Type = Auto->JS
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      Begin Experiment:
        rad_ = 0.25 # radius = a quarter of the screen
        box_size = 0.1

        study_frames = 0.2 * 60
        retention_frames = 1 * 60
        test_frames = 1.3 * 60
        test_fix_frames = 2.3 * 60

        ## INITIAL COLOURS (DO NOT USE BECAUSE JS SUCKS!!!:
        #clrs = {'RED':np.array([255,36,28]),
        #       'GREEN':np.array([0, 248, 25]),
        #       'BLUE':np.array([0, 145, 255]),
        #       'YELLOW':np.array([255,251, 34]),
        #       'CYAN':np.array([0, 255, 255]),
        #       'PURPLE':np.array([255, 60, 255]),
        #       'WHITE':np.array([250, 250, 250])}

        ## The _ is to differentiate these from builtin color vars.
        #_RED = [1.0, -0.7176470588235294, -0.7803921568627451]
        #_GREEN = [-1.0, 0.9450980392156862, -0.803921568627451]
        #_BLUE = [-1.0, 0.13725490196078427, 1.0]
        #_YELLOW = [1.0, 0.968627450980392, -0.7333333333333334]
        #_CYAN = [-1.0, 1.0, 1.0]
        #_PURPLE = [1.0, -0.5294117647058824, 1.0]
        #_WHITE = [0.9607843137254901, 0.9607843137254901, 0.9607843137254901]
        #_X = bgcol
        #
        #
        #
        ## Seven colours plus a bacground blank colour (X). IF there's a change, the to-change slot's colour changes to the seventh.
        #all_colours = {"RED":_RED, "GREEN":_GREEN, "BLUE":_BLUE, "YELLOW":_YELLOW, "CYAN":_CYAN, "PURPLE":_PURPLE, "WHITE":_WHITE, 'X':_X}

        # Since these get set prior to reading in the file they need initializing
        # ... they get updated on each trial so the X is just filler.

        #study_clr1 = _X
        #study_clr2 = _X
        #study_clr3 = _X
        #study_clr4 = _X
        #study_clr5 = _X
        #study_clr6 = _X
        #
        #test_clr1 = _X
        #test_clr2 = _X
        #test_clr3 = _X
        #test_clr4 = _X
        #test_clr5 = _X
        #test_clr6 = _X
      Each Frame:
        if int(expInfo['version']) == 1:
            buttons_mapping = "D (change)\nJ (no change)"
            continueRoutine = True
            print("Version 1")
        else:
            buttons_mapping = "D (no change)\nJ (change)"
            continueRoutine = False
            print("Version 2")
    TextComponent wm_instr_txt_1
      color [set every repeat] = $basecol
      font = cambria
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will see a circular array of coloured squares.

        The colours will quickly disappear and then reappear after one second.

        When the colours reappear, they will either be identical or *one of the colours will have changed*.

        When they reappear, press [D] if there was a change, or press [J] if there was not a change.

        This is fast, so respond as quickly and accurately as possible.

        Press [SPACE] to begin.
    KeyboardComponent wm_start_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine wm_instructions_2
    CodeComponent wm_setup_code_2
      Code Type = Auto->JS
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      Begin Experiment:
        rad = 0.25 # radius = a quarter of the screen
        box_size = 0.1

        study_frames = 0.2 * 60
        retention_frames = 1 * 60
        test_frames = 1.3 * 60
        test_fix_frames = 2.3 * 60

        ## INITIAL COLOURS (DO NOT USE BECAUSE JS SUCKS!!!:
        #clrs = {'RED':np.array([255,36,28]),
        #       'GREEN':np.array([0, 248, 25]),
        #       'BLUE':np.array([0, 145, 255]),
        #       'YELLOW':np.array([255,251, 34]),
        #       'CYAN':np.array([0, 255, 255]),
        #       'PURPLE':np.array([255, 60, 255]),
        #       'WHITE':np.array([250, 250, 250])}

        ## The _ is to differentiate these from builtin color vars.
        #_RED = [1.0, -0.7176470588235294, -0.7803921568627451]
        #_GREEN = [-1.0, 0.9450980392156862, -0.803921568627451]
        #_BLUE = [-1.0, 0.13725490196078427, 1.0]
        #_YELLOW = [1.0, 0.968627450980392, -0.7333333333333334]
        #_CYAN = [-1.0, 1.0, 1.0]
        #_PURPLE = [1.0, -0.5294117647058824, 1.0]
        #_WHITE = [0.9607843137254901, 0.9607843137254901, 0.9607843137254901]
        #_X = bgcol
        #
        #
        #
        ## Seven colours plus a bacground blank colour (X). IF there's a change, the to-change slot's colour changes to the seventh.
        #all_colours = {"RED":_RED, "GREEN":_GREEN, "BLUE":_BLUE, "YELLOW":_YELLOW, "CYAN":_CYAN, "PURPLE":_PURPLE, "WHITE":_WHITE, 'X':_X}

        # Since these get set prior to reading in the file they need initializing
        # ... they get updated on each trial so the X is just filler.

        #study_clr1 = _X
        #study_clr2 = _X
        #study_clr3 = _X
        #study_clr4 = _X
        #study_clr5 = _X
        #study_clr6 = _X
        #
        #test_clr1 = _X
        #test_clr2 = _X
        #test_clr3 = _X
        #test_clr4 = _X
        #test_clr5 = _X
        #test_clr6 = _X
      Each Frame:
        if int(expInfo['version']) == 2:
            buttons_mapping = "D (no change)\nJ (change)"
            continueRoutine = True
            print("Version 2")
        else:
            buttons_mapping = "D (change)\nJ (no change)"
            continueRoutine = False
            print("Version 1")
    TextComponent wm_instr_txt_2
      color [set every repeat] = $basecol
      font = cambria
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You will see a circular array of coloured squares.

        The colours will quickly disappear and then reappear after one second.

        When the colours reappear, they will either be identical or *one of the colours will have changed*.

        When they reappear, press [J] if there was a change, or press [D] if there was not a change.

        This is fast, so respond as quickly and accurately as possible.

        Press [SPACE] to begin.
    KeyboardComponent wm_start_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_of_study
    TextComponent end_study_text
      color = $basecol
      durationEstim = 2.5
      font = cambria
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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      text:
        END OF STUDY

        Thank You!
Flow
  Routine wm_intro
  Routine wm_instructions_1
  Routine wm_instructions_2
  LoopInitiator wm_runs loopType="TrialHandler"
    conditionsFile = $"protocol/wm_main_" + exp_version + ".xlsx"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine wm_real_start
    Routine wm_pre_fixation
    LoopInitiator wm_trials loopType="TrialHandler"
      conditionsFile = $"protocol/" + wm_file
      loopType = random
      nReps = 2
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      Routine wm_rest
      Routine wm_study
      Routine wm_retention
      Routine wm_test
    LoopTerminator wm_trials
  LoopTerminator wm_runs
  Routine end_of_study
